CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:61
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>.*)_exp(?P<ExpNum>.*)_slide(?P<SlideNum>.*)_newsettings_(?P<ImageNum>.*).nd2
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<FullImageName>.*).nd2
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'Not multipoint in this replicate, need to match by both series and Z, and group by series as well as image name. ']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
    Assign a name to:Images matching rules
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    Match metadata:[{'OrigDNA': 'FullImageName', 'OrigRed': 'FullImageName', 'OrigGreen': 'FullImageName'}, {'OrigDNA': 'Series', 'OrigRed': 'Series', 'OrigGreen': 'Series'}, {'OrigDNA': 'Z', 'OrigRed': 'Z', 'OrigGreen': 'Z'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelName "DAPI")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does ChannelName "Texas Red")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does ChannelName "EGFP")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', 'Grouping each image so all z slices are processed together for tracking objects, and separating out each series into separate group so nuclei are not tracked between images of multipoint images. ']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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:FullImageName
    Metadata category:Series

Align:[module_num:5|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notes:['(Optional) Since accurate colocalization requires accurate positioning of the features in both images, it is sometimes worth using this module to align the images.', '', 'If aligning the images, it is important to remember that there needs to be sufficient overlap in image features, other than the features suspected of overlapping, in order to align them. For example, attempting to align two images in which there is little to no colocalization will probably result in poor alignment. ']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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:OrigDNA
    Name the first output image:DNA
    Select the second input image:OrigGreen
    Name the second output image:Green
    Select the additional image:OrigRed
    Name the output image:Red
    Select how the alignment is to be applied:Separately

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:50
    Suppress local maxima that are closer than this minimum allowed distance:100
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
TrackObjects:[module_num:7|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notes:['Track edited nuclei in each group by overlap. Tracking goes from low Z to high Z slice. ']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
    Choose a tracking method:Overlap
    Select the objects to track:Nuclei
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    Maximum pixel distance to consider matches:100
    Select display option:Color and Number
    Save color-coded image?:No
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    Filter objects by lifetime?:No
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
MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:DNA, Green, Red
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:10
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:Red
    Name the output image:EnhancedRed
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:Green
    Name the output image:EnhancedGreen
    Select the operation:Enhance
    Feature size:20
    Feature type:Neurites
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    Smoothing scale:3.0
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    Enhancement method:Tubeness
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    Rescale result image:No

MaskImage:[module_num:11|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
    Select the input image:EnhancedRed
    Name the output image:MaskedRed
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:12|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
    Select the input image:EnhancedGreen
    Name the output image:MaskedGreen
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:MaskedRed
    Name the primary objects to be identified:RedObjects
    Typical diameter of objects, in pixel units (Min,Max):3,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:MaskedGreen
    Name the primary objects to be identified:GreenObjects
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MaskObjects:[module_num:15|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
    Select objects to be masked:RedObjects
    Name the masked objects:CRegion
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:GreenObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:16|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
    Select objects to be masked:RedObjects
    Name the masked objects:CORed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:GreenObjects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:17|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
    Select objects to be masked:GreenObjects
    Name the masked objects:COGreen
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:RedObjects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:18|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
    Parent objects:GreenObjects
    Child objects:RedObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:19|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
    Parent objects:RedObjects
    Child objects:GreenObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:20|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
    Select the objects to filter:RedObjects
    Name the output objects:RedObjWithGreenChildren
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_GreenObjects_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:21|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
    Select the objects to filter:GreenObjects
    Name the output objects:GreenObjWithRedChildren
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_RedObjects_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:22|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
    Select object sets to measure:COGreen, CORed, CRegion, GreenObjects, Nuclei, RedObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:23|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
    Parent objects:Nuclei
    Child objects:GreenObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:24|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
    Parent objects:Nuclei
    Child objects:RedObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:25|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
    Parent objects:Nuclei
    Child objects:CRegion
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:26|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
    Parent objects:Nuclei
    Child objects:COGreen
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:27|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
    Parent objects:Nuclei
    Child objects:CORed
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:28|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
    Parent objects:Nuclei
    Child objects:GreenObjWithRedChildren
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:29|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
    Parent objects:Nuclei
    Child objects:RedObjWithGreenChildren
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MeasureImageAreaOccupied:[module_num:30|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
    Measure the area occupied by:Objects
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    Select object sets to measure:COGreen, CORed, CRegion, GreenObjects, Nuclei, RedObjects

CalculateMath:[module_num:31|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notes:['area of colocalization per nucleus', 'Mean area of colocalized regions x number of colocalized region per nucleus']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
    Name the output measurement:CArea_ByNuclei
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:Nuclei
    Select the first operand measurement:Mean_CRegion_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:Nuclei
    Select the second operand measurement:Children_CRegion_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:32|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notes:['mean area of colocalized red objects x number of colocalized red objects (whole object)']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
    Name the output measurement:ColocRedObjectArea_ByNuclei
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:Nuclei
    Select the first operand measurement:Mean_CORed_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:Nuclei
    Select the second operand measurement:Children_CORed_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:33|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notes:['mean area of red objects x number of red objects']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
    Name the output measurement:RedTotalArea_ByNuclei
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:Nuclei
    Select the first operand measurement:Mean_RedObjects_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:Nuclei
    Select the second operand measurement:Children_RedObjects_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:34|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notes:['Fraction of red object area colocalized with green (actual area, not full objects)']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
    Name the output measurement:RedColocAreaFraction_ByNuclei
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Math_CArea_ByNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Math_RedTotalArea_ByNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:35|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notes:['Fraction of red object area colocalized - full objects, not just coloc regions. ']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
    Name the output measurement:RedColocObjectAreaFraction_ByNuclei
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Math_ColocRedObjectArea_ByNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Math_RedTotalArea_ByNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:36|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
    Name the output measurement:GreenTotalArea_ByNuclei
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:Nuclei
    Select the first operand measurement:Mean_GreenObjects_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:Nuclei
    Select the second operand measurement:Children_GreenObjects_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:37|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notes:['Coloc green object area (area of entire green object with any coloc region)']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
    Name the output measurement:GreenObjectColocalizedArea_ByNuclei
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:Nuclei
    Select the first operand measurement:Mean_COGreen_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:Nuclei
    Select the second operand measurement:Children_COGreen_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:38|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notes:['Fraction of green object area colocalized with red objects']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
    Name the output measurement:ColocGreenAreaFraction_ByNuclei
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Math_CArea_ByNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Math_GreenTotalArea_ByNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:39|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notes:['Fraction of green object area coloc with red objects - full green objects included, not just region overlapping red']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
    Name the output measurement:GreenObjectColocalizedFraction_ByNuclei
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Math_GreenObjectColocalizedArea_ByNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Math_GreenTotalArea_ByNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:40|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
    Name the output measurement:RedObjectsWithGreenChildrenFraction
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Children_RedObjWithGreenChildren_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Children_RedObjects_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:41|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
    Name the output measurement:GreenObjectsWithRedChildrenFraction
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Children_GreenObjWithRedChildren_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Children_GreenObjects_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:42|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:220221_exp4.38_CoLoc_Updated
    Overwrite existing files without warning?:No
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
ConvertObjectsToImage:[module_num:43|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
    Select the input objects:Nuclei
    Name the output image:NucleiObjectsImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:44|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
    Select the input objects:RedObjects
    Name the output image:RedObjectsImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:45|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
    Select the input objects:GreenObjects
    Name the output image:GreenObjectsImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:46|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
    Select the input objects:CRegion
    Name the output image:ColocalizedRegionObjectsImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:47|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
    Select the input objects:CORed
    Name the output image:ColocalizedRedObjectsImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:48|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
    Select the input objects:COGreen
    Name the output image:ColocalizedGreenObjectsImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:49|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
    Select the input objects:GreenObjWithRedChildren
    Name the output image:GreenObjectsWithRedChildren
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:50|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
    Select the input objects:RedObjWithGreenChildren
    Name the output image:RedObjectsWithGreenChildren
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:NucleiObjectsImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_\g<Z>_Nuclei
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|NucleiObjects
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:GreenObjectsImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigGreen
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_\g<Z>_Green
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|GreenObjects
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:53|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
    Select the type of image to save:Image
    Select the image to save:RedObjectsImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigRed
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_\g<Z>_Red
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|RedObjects
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:54|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
    Select the type of image to save:Image
    Select the image to save:ColocalizedRedObjectsImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigRed
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_\g<Z>_ColocRed
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|ColocRedObjects
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:55|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
    Select the type of image to save:Image
    Select the image to save:ColocalizedGreenObjectsImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigGreen
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_\g<Z>_ColocGreen
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|ColocGreenObjects
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:56|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
    Select the type of image to save:Image
    Select the image to save:ColocalizedRegionObjectsImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigGreen
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_\g<Z>_Overlap
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlappedObjects
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:57|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
    Select the type of image to save:Image
    Select the image to save:DNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_\g<Z>_DNA
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Aligned_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:58|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
    Select the type of image to save:Image
    Select the image to save:Red
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigRed
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_\g<Z>_Red
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Aligned_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:59|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
    Select the type of image to save:Image
    Select the image to save:Green
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigGreen
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_\g<Z>_Green
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Aligned_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:60|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
    Select the type of image to save:Image
    Select the image to save:GreenObjectsWithRedChildren
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigGreen
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_\g<Z>_GreenObsWithRedChildren
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|GreenObsWithRedChildren
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:61|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
    Select the type of image to save:Image
    Select the image to save:RedObjectsWithGreenChildren
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigRed
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_\g<Z>_RedObsWithGreenChildren
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|RedObsWithGreenChildren
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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